OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Eyes-open (EO)
  Eyes-closed (EC)
Comment
  EO
Comment
  EC
  (120sec)
Comment
  240s

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Timeout => #1
  Timeout delay = 1
  Output Stimulation = OVTK_GDF_Eyes_Up
Timeout => #2
  Timeout delay = 120
  Output Stimulation = OVTK_GDF_Eyes_Down
Input stimulations 1=#1, Input stimulations 2=#2 -> Stimulation multiplexer => #3
Data=#0.Signal stream, Stimulations=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/EO-EC-[$core{date}-$core{time}].gdf
Input Signal=#0.Signal stream, Input Stimulations=#3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/EO-EC-[$core{date}-$core{time}].ov
  Use compression = false

Timeout
  Timeout delay = 241
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause
