OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Train CSP
Comment
  8-30Hz

Generic stream reader => #0
  Filename = D:/_Thanos/git/neurow-cuebased/OV-scenarios/signals/motor-imagery-1-[2020.02.17-15.04.20].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left trials" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Timeout => #5
  Timeout delay = 410
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#2.Output stream 2, Input stimulations 2=#5 -> Stimulation multiplexer => #6
Stimulations=#6, Signal condition 1=#3, Signal condition 2=#4 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
  Filter dimension = 2
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
