OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visulization
  box for feedback !

  In order to display correct feedback,
  the Graz Visulization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
Signal=#1.Output stream 2, Stimulation=#1.Output stream 3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-1-[$core{date}-$core{time}].gdf
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 2 -> Channel Selector "8;25"
  Channel List = 8;25
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = C:/Users/eeguser/Documents/git/neurow-cuebased/OV-scenarios/motor-imagery-bci-config-classifier.cfg
#11.Hyperplane distance -> Simple DSP => #12
  Equation = x
#11.Probability values -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
Analog VRPN Client => #14
  Peripheral name = openvibe-vrpn@localhost
  Sampling Rate = 512
  Number of Channels = 2
  Sample Count per Sent Block = 32
-> Channel Selector "1" => #15
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#14 -> Channel Selector "2" => #16
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#15, Input - B=#16 -> Simple DSP => #17
  Equation = A-B
Data=#17 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Graz Motor Imagery BCI Stimulator => #19
  Lua Script = C:/Users/eeguser/Documents/git/neurow-cuebased/OV-scenarios/motor-imagery-bci-graz-stimulator-fmri-2.lua
  Number of Trials for Each Class = 4
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 0
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.500
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 2.500
Input signal=#17, Input stimulations=#19 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Stimulations=#19, Amplitude=#12 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> 0x341d3912 Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
