OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)

Generic stream reader => #0
  Filename = C:/Users/eeguser/Desktop/01-Andreas/MO-Neurow-online/record-[2019.09.23-14.56.55].ov
#0.Output stream 3 -> Switch director => #1
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = 3.895456e-002 3.778097e-002 2.938309e-002 -9.788274e-002 -3.968528e-002 6.916557e-002 -1.781311e-002 -4.550318e-002 1.838463e-003 -4.318400e-003 -4.758229e-002 8.746883e-002 -8.669490e-002 1.470763e-001 -3.010208e-002 7.847492e-002 -9.258204e-002 -1.588618e-001 3.019603e-002 3.670722e-001 -1.344270e-001 -2.053658e-002 1.669169e-002 -5.694708e-002 1.752974e-002 -7.353498e-001 3.759703e-001 2.223170e-001 5.157963e-002 -2.557718e-002 6.962140e-002 1.587784e-002 -2.299291e-002 8.573178e-002 5.156094e-002 4.208025e-003 -3.231480e-004 -1.741512e-002 -1.317612e-001 1.216400e-001 -1.189420e-002 -1.193133e-002 -1.246434e-001 6.549134e-002 -1.568162e-001 7.802345e-002 1.501166e-001 -4.629385e-001 7.413952e-001 -3.052243e-001 6.240394e-004 4.298791e-002 -2.305681e-002 -1.543605e-002 6.986751e-002 -1.079839e-001 -1.920896e-002 -4.290301e-002 2.369059e-002 4.141804e-002 -3.499206e-003 -5.287728e-002 8.020091e-003 -1.265797e-003
  Number of Output Channels = 2
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = C:/Users/eeguser/Documents/git/neurow-cuebased/OV-scenarios/csp-spatial-filter.cfg
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
Triggers=#1, Matrix=#4 -> Stream Switch => #5
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#5.Output[0] -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = C:/Users/eeguser/Documents/git/neurow-cuebased/OV-scenarios/motor-imagery-bci-config-classifier.cfg
#11.Hyperplane distance -> Simple DSP => #12
  Equation = x
Stimulations=#2.Output stream 2, Amplitude=#12 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#2.Output stream 2 -> Stimulation Filter => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Right
Targets=#14, Classification results=#11.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#14, LDA=#11.Labels -> 0x341d3912 Accuracy Measure
Timeout => #18
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Input stimulations 1=#2.Output stream 2, Input stimulations 2=#18 -> Stimulation multiplexer => #20
Expected labels=#20, Probability values=#11.Probability values -> ROC curve
  Computation trigger = OVTK_StimulationId_ExperimentStop
  Number of classes = 2
  Class 1 identifier = OVTK_GDF_Left
  Class 2 identifier = OVTK_GDF_Right

Channel Selector "8;25"
  Channel List = 8;25
  Action = Select
  Channel Matching Method = Smart

Channel Selector "6;7;8;11;12;25;23;22;28;29"
  Channel List = 6;7;8;11;12;25;23;22;28;29
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = -1;-1;4;-1;-1;0;0;0;0;0;0;0;0;0;0;4;-1;-1;-1;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
