OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  BLOCK
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. This
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 30
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  pause on start
Comment
  start after "s" key input

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Users/eeguser/Documents/git/neurow-cuebased/OV-scenarios/motor-imagery-bci-graz-stimulator-fmri-2.lua
  Number of Trials for Each Class = 4
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 0
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.500
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 2.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStart
  Action to perform = Pause
Input stimulations=#0 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause

0x341d3912 Channel Selector "8;24;25"
  Channel List = 8;24;25
  Action = Select
  Channel Matching Method = Smart

0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 =

0x341d3912 Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/keyboard-to-stimulations.txt
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Label_02
  Action to perform = Play

0x341d3912 Acquisition client => #9
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#9.Signal stream, Stimulations=#9.Stimulations -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#9.Experiment information, Input stream 2=#9.Signal stream, Input stream 3=#9.Stimulations -> 0x341d3912 Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-1-[$core{date}-$core{time}].ov
  Use compression = false
Experiment information=#9.Experiment information, Signal=#9.Signal stream, Stimulation=#9.Stimulations -> 0x341d3912 GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-block-1-[$core{date}-$core{time}].gdf
