OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main difference between this scenario and
  scenario 3-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 3-online for
  details about the processing.

Generic stream reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/bci-motor-imagery.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = C:/ProgramFiles/openvibe-2.0.1/share/openvibe/scenarios/bci-examples/motor-imagery/motor-imagery-bci-config-classifier.cfg
#11.Probability values -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
#11.Hyperplane distance -> Simple DSP => #13
  Equation = x
Stimulations=#1.Output stream 2, Amplitude=#13 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Analog VRPN Client => #15
  Peripheral name = openvibe-vrpn@localhost
  Sampling Rate = 512
  Number of Channels = 2
  Sample Count per Sent Block = 32
-> Channel Selector "1" => #16
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#15 -> Channel Selector "2" => #17
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#16, Input - B=#17 -> Simple DSP => #18
  Equation = A-B
Input signal=#18, Input stimulations=#1.Output stream 2 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#18 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
